// Code used for paper 'Falsifying computational models of endothelial network formation through quantitative comparison with in vitro models'
testmode=true;
/* Start code */
run("Fresh Start"); //reset settings
if (testmode==false) {
	close("*"); //close all images
	run("Collect Garbage"); //clean cache
	setBatchMode(true); // Open images in batchmode
}
requires("1.33s");
dir=getDirectory("Choose a directory with network images");
dir2=getDirectory("Select an output folder");
count=1;
countFolders(dir);
n=0;
mechmodel=false; //Define if the analysis is performed on the chemotaxis based models or the mechanical model
segment=true;
save_segmentation=true;
skeleton=true; //Do you want to analyse the branches
lacunae=true; //Do you want to analyse the lacunae
if (skeleton == false && lacunae == false) {waitForUser("There will be no analysis unless either \nskeleton and/or lacunae are true");}
roundWells=true; //Define is ROI is round or square
branch_info=true; //Do you want to separate sprouts from bridges
save_overview=true; //Save a result image with overlays
wellSize=3800; //Define ROI diameter in µm
roundWells=true;//
pixelSize=1.0; //µm
stride = 60; //Define MCS stepsize
pixelUnit="µm";
imageExtension=".png";
processFolders(dir);

/* Find all files in all subfolders */
function countFolders(dir){
	list=getFileList(dir);
	for(j=0;j<list.length;j++){
		if(endsWith(list[j],"/")){count++;}}}
function processFolders(dir){
	list=getFileList(dir);
	if (count==1) {
		processFolder(dir);
	}
	else {
		for(j=0;j<list.length;j++){
			if(endsWith(list[j],"/")){
				showProgress(n++,count);
				files=getFileList(dir+list[j]);
				path=dir+list[j]+files[0];
				processFolder(path);}}}}
			
/* Start analysis */
function processFolder(path){
	start=getTime();
	File.openSequence(path, "virtual filter="+imageExtension);
	if(testmode){waitForUser("The timelapse should be opened. \nIf not, cancel and select a different directory.");}
	filename=getTitle();
	if (mechmodel) {
		run("Split Channels");
		close();
		close();}
	Stack.setFrameInterval(stride);
	setVoxelSize(pixelSize,pixelSize,pixelSize,pixelUnit);
	if (segment) {
		run("8-bit");
		run("Convert to Mask", "method=Default background=Dark calculate black");
		if(testmode){waitForUser("The image has been converted into 8-bit and segmented. \nIf the model did not properly segment, cancel and add appropriate preprocessing to the model output.");}
		if (mechmodel) {run("Options...", "iterations=1 count=1 black do=Close stack");}
		else {run("Options...", "iterations=1 count=1 black do=Open stack");}
		setOption("BlackBackground",true);
	}
	getDimensions(width, height, channels, slices, frames);
	size=slices*frames; //Sometimes frames are saved as slices
	getPixelSize(unit,pixelWidth,pixelHeight);
	if(testmode){waitForUser("Are the pixelsize ("+pixelWidth+unit+") and timestep ("+Stack.getFrameInterval+" MCS) correct? \nIf not, cancel and adjust in image metadata or in line 23-25.");}
	if(roundWells){makeOval(0,0,wellSize,wellSize);run("Clear Outside","stack");
		if(testmode){waitForUser("The timelapse has been cropped for a round well. \nIf your timelapse is not round, cancel and \nchange roundWells==false in line 19.");}
	}
	else {run("Select All");}
	run("Set Measurements...","area redirect=None decimal=0");
	run("Measure");
	Areal=getResult("Area", 0);
	run("Clear Results");
	
	/* Start */
	/* Make a copy for the overview image */
	img=getImageID();
	if (save_overview) {
		run("Scale...", "x=0.25 y=0.25 z=1.0 interpolation=Bilinear fill process create");
		img2=getImageID();}
	if(testmode){waitForUser("The timelapse is duplicated to make the overview image.");}
	selectImage(img);
	
	/* Extract parameters and create arrays */
	Sprouts_length=newArray(size);
	Sprouts_n=newArray(size);
	Segments_n=newArray(size);
	Segments_length=newArray(size);
	Branches_length=newArray(size);
	Branches_n=newArray(size);
	Junctions_n=newArray(size);
	Triple_points_n=newArray(size);
	Branches_max_length=newArray(size);
	Lacunae_n=newArray(size);
	Lacunae_total_area=newArray(size);
	Lacunae_area=newArray(size);
	FeretX=newArray(size);
	FeretY=newArray(size);
	FeretMin=newArray(size);
	Feret_angle=newArray(size);
	Perimeter=newArray(size);
	Circularity=newArray(size);
	Skeletons_n=newArray(size);
	Experiment=newArray(size);
	Time=newArray(size);
	AreaL=newArray(size);
	AreaB=newArray(size);
	Slice=newArray(size);
	Percentage=newArray(size);
	Major=newArray(size);
	Minor=newArray(size);
	
	if (save_segmentation) {saveAs("Tiff",dir2+filename+"_Binary.tif");}
	rename("Binary"); //the model is already "segmented"
	bin=getImageID();
	
	/* Start Skeletonization */
	if (skeleton) {
		if(testmode){waitForUser("The image will now be scaled down to create a skeleton network.");}
		run("Scale...", "x="+0.1*pixelWidth+" y="+0.1*pixelWidth+" interpolation=Bilinear average process create");
		run("Auto Threshold","method=Huang dark stack");
		if (mechmodel) {
			run("Invert","stack");}
		//	run("Invert","stack");
		if(roundWells){makeOval(0,0,wellSize*0.1,wellSize*0.1);
			run("Enlarge...","enlarge=-100");
			run("Crop","stack");
			setBackgroundColor(0,0,0);
			run("Clear Outside","stack");}
		else {run("Select All");}
		run("Set Measurements...","area redirect=None decimal=0");
		run("Measure");
		Areab=getResult("Area", 0);
		run("Clear Results");
		for(i=1;i<size+1;i++){
			setSlice(i);
			run("Skeletonize","slice");}
		if(testmode){waitForUser("The network should be skeletonized. \nIf the background has been skeletonized instead, cancel and \nadd or remove the // before the invert command on line 133.");}
		skel=getImageID();
		run("Analyze Particles...", "size=400-Infinity show=Masks stack"); //Remove small pixel clusters from skeleton
		selectImage(skel);
		close();
		//run("Invert","stack");
		run("Restore Selection");
		setBackgroundColor(255,255,255);
		run("Clear Outside","stack");
		if(testmode){waitForUser("The background should be removed around the field of interest. \nIf not, cancel and add or remove the // before the invert command in line 187 \nor setBackgroundColor to 0,0,0 on line 152.");}
		saveAs("Tiff",dir2+filename+"_Skeleton.tif");
		run("Area to Line");
		run("Select None");
		getPixelSize(nunit, npixelWidth, npixelHeight);
		skel=getImageID();
		if(testmode){waitForUser("Now the tool will extract all details of the skeleton for each timestep of the timelapse. \nThis could take a while when branch_info is true, in line 20, and the tool will extract \ninfo on whether branches are sprouts or segments.");}
		for(i=0;i<size;i++){
			Sprouts_n[i]=0;
			Sprouts_length[i]=0;
			Segments_n[i]=0;
			Segments_length[i]=0;
			Skeletons_n[i]=0;
			test=1;
			selectImage(skel);
			setSlice(i+1);
			run("Analyze Particles...", "size=4000-Infinity show=Masks");
			mask=getTitle();
			run("Analyze Skeleton (2D/3D)","prune=none");
			if (nResults>0) {IJ.renameResults("Results","All skeletons");}
			else {
				print("No skeletons detected in slice "+i);
				if(isOpen("Tagged skeleton")){close();}
				if (isOpen(mask)){close();}
				getDimensions(wth, hgt, cha, scs, frm);
				newImage("Endpoints", "8-bit black", wth, hgt, 1);
				newImage("Nodes", "8-bit black", wth, hgt, 1);
				continue}
			selectWindow("Tagged skeleton");
			setThreshold(63, 79);
			setOption("BlackBackground", false);
			run("Convert to Mask");
			rename("Nodes");
			selectWindow(mask);
			run("Restore Selection");
			setForegroundColor(0, 0, 0);
			setBackgroundColor(255, 255, 255);
			run("Fill", "slice");
			run("Analyze Skeleton (2D/3D)", "prune=none show");
			selectImage("Tagged skeleton");
			setThreshold(23, 39);
			setOption("BlackBackground", false);
			run("Convert to Mask");
			run("Find Maxima...", "prominence=50 light output=List");
			X=newArray(nResults);
			Y=newArray(nResults);
			if (nResults>0) {
				for (ii = 0; ii < nResults; ii++) {
					X[ii]=getResult("X", ii);
					Y[ii]=getResult("Y", ii);}
				selectWindow("Results");
				run("Close");}
			else {print("No endpoints in slice "+i+1);
				getDimensions(wth, hgt, cha, scs, frm);
				newImage("Tagged skeleton", "8-bit black", wth, hgt, 1);}
			selectImage("Tagged skeleton");
			run("Invert");
			rename("Endpoints");
			selectImage(mask);
			close();
			
			/* Find the biggest skeletons */
			IJ.renameResults("All skeletons","Results");
			min_branch=400; //Skeletons below min_branch µm will not be considered
			nskel=nResults;
			num_skel=0;
			total_branch=newArray(nResults);
			for(ii=0;ii<nskel;ii++){
				total_branch[ii]=getResult("# Branches",ii)*getResult("Average Branch Length",ii);
				if(total_branch[ii] > min_branch){
					if(branch_info){
						IJ.renameResults("Results","All skeletons");
						IJ.renameResults("Branch information","Results");
						for (iii = 0; iii < nResults; iii++) {
							if (getResult("Skeleton ID",iii)==ii+1) {
								branch_X1=round(getResult("V1 x", iii)/npixelWidth);
								branch_Y1=round(getResult("V1 y", iii)/npixelWidth);
								branch_X2=round(getResult("V2 x", iii)/npixelWidth);
								branch_Y2=round(getResult("V2 y", iii)/npixelWidth);				
								for (iiii = 0; iiii < X.length; iiii++) {
									if (Sprouts_n[i]>=X.length) {
										test=1;
										continue}
								//	print("Endpoint "+iiii+" out of "+X.length);
									if (branch_X1==X[iiii]&&branch_Y1==Y[iiii]){
										Sprouts_length[i]=((Sprouts_length[i]*Sprouts_n[i])+getResult("Branch length", iii))/(Sprouts_n[i]+1);
										Sprouts_n[i]=Sprouts_n[i]+1;
									//	print("The length of the sprout "+Sprouts_n[i]+" out of "+X.length+" endpoints is "+getResult("Branch length", iii)+" at coordinate "+X[iiii]+","+Y[iiii]+".");
										test=0;
										break
									}
									else if (branch_X2==X[iiii]&&branch_Y2==Y[iiii]){
										Sprouts_length[i]=((Sprouts_length[i]*Sprouts_n[i])+getResult("Branch length", iii))/(Sprouts_n[i]+1);
										Sprouts_n[i]=Sprouts_n[i]+1;
									//	print("The length of the sprout "+Sprouts_n[i]+" out of "+X.length+" endpoints is "+getResult("Branch length", iii)+" at coordinate "+X[iiii]+","+Y[iiii]+".");
										test=0;
										break
									}
									else{test=1;}
								}
								if (test==1) {
									Segments_length[i]=(Segments_length[i]*Segments_n[i]+getResult("Branch length", iii))/(Segments_n[i]+1);
									Segments_n[i]=Segments_n[i]+test;
								//	print("The length of branch "+Segments_n[i]+" is "+getResult("Branch length", iii));
								}	
							}	
						}
			//			print("The total number of sprouts in slice "+i+" is: "+Sprouts_n[i]);
						IJ.renameResults("Results","Branch information");
						IJ.renameResults("All skeletons","Results");
					}
					/* Extract the results from the biggest skeletons */
					Branches_length[i]=((Branches_length[i]*Branches_n[i])+total_branch[ii])/(Branches_n[i]+getResult("# Branches" ,ii));
					Branches_n[i]=Branches_n[i]+getResult("# Branches" ,ii);
					Junctions_n[i]=Junctions_n[i]+getResult("# Junctions" ,ii);
					Triple_points_n[i]=Triple_points_n[i]+getResult("# Triple points",ii);
					Branches_max_length[i]=maxOf(Branches_max_length[i],getResult("Maximum Branch Length" ,ii));
					num_skel++;
				}
			}
			Skeletons_n[i]=num_skel;
		}
		run("Images to Stack", "name=Endpoints title=Endpoint");
		run("Images to Stack", "name=Nodes title=Nodes");
		if (testmode) {waitForUser("The tool has finished analyzing the skeleton and generated images \nof the endpoints and the nodes for the overview image.");}
		if (save_overview==false) {if(isOpen("Endpoint")){selectImage("Endpoint");close();};if(isOpen("Nodes")){selectImage("Nodes");run("Close");}}
		imgep=getImageID();
		if(isOpen("Branch information")){
			selectWindow("Branch information");
			run("Close");}
		if (nResults>0) {
			selectWindow("Results");
			run("Close");
		}
	}
	selectImage(bin);
			
	/* Measure the lacunae */
	if (lacunae) {
		selectImage(bin);
		setBackgroundColor(0,0,0);
		if (mechmodel) {
			run("Select None");	
			run("Invert","stack");}
		if (roundWells) {
			makeOval(0,0,wellSize/pixelWidth,wellSize/pixelWidth);
			run("Enlarge...","enlarge=-5");
			run("Clear Outside","stack");}
		else {run("Select All");}
		run("Set Measurements...","area redirect=None decimal=0");
		run("Measure");
		Areal=getResult("Area", 0);
		run("Clear Results");
		if (testmode) {waitForUser("The tool will now measure the lacunae.");}
		//run("Invert","stack");
		run("Set Measurements...","area standard centroid center perimeter bounding fit shape feret's area_fraction stack nan add redirect=None decimal=3");
		run("Analyze Particles...","size=4000-11300000 circularity = 0.20-1.00 show=[Bare Outlines] display exclude clear summarize add stack");
		setSlice(size);
		if (testmode) {waitForUser("If the outlines are outlines of the branches instead of the lacunae, \ncancel and add or remove // in front of the invert command in line 311.");}
		rename(filename+"_Outlines");
	
		/* Save the measurements */
		if(roiManager("count")>0){roiManager("Save",dir2+filename+"_RoiSet.zip");}
		if (nResults>0) {
			selectWindow("Results");
			saveAs("Results",dir2+filename+"_per_hole.csv");
			run("Close");}
			
		/* Extract the Lacunae results */
		if(size>1){IJ.renameResults("Summary of Binary","Results");}
		else{IJ.renameResults("Summary","Results");}
		for(row=0;row<size;row++){
			Lacunae_n[row]=getResult("Count",row);
			Lacunae_total_area[row]=getResult("Total Area",row);
			Lacunae_area[row]=getResult("Average Size",row);
			Percentage[row]=getResult("%Area", row);
			FeretX[row]=getResult("FeretX",row);
			FeretY[row]=getResult("FeretY",row);
			FeretMin[row]=getResult("MinFeret",row);
			Feret_angle[row]=getResult("FeretAngle",row);
			Perimeter[row]=getResult("Perim.",row);
			Major[row]=getResult("Major", row);
			Minor[row]=getResult("Minor", row);
			Circularity[row]=getResult("Circ.",row);
			Slice[row]=getResult("Slice", row);}
		run("Clear Results");
		}
		selectImage(bin);
		close();
		/* Add branch info and the lacunae info to a fresh results table */
		for(i=0;i<size;i++){
			Experiment[i]=filename;
			Time[i]=i*stride; //time in mcs
			if (skeleton) {AreaB[i]=Areab;}
			else {AreaB[i]=0;}
			if (lacunae) {AreaL[i]=Areal;}
			else {AreaL=0;}}
		if (lacunae || skeleton) {Array.show("Results",Experiment,Slice,Time,Lacunae_n,Lacunae_area,Lacunae_total_area,Percentage,FeretX,FeretY,FeretMin,Feret_angle,Perimeter,Circularity,Skeletons_n,Branches_length,Branches_n,Segments_length,Segments_n,Sprouts_length,Sprouts_n,Junctions_n,Triple_points_n,Branches_max_length,AreaB,AreaL);}
		if (nResults>0) {
			selectWindow("Results");
			saveAs("Results",dir2+filename+"_total_network_quantification_"+pixelWidth+unit+".csv");
			if (testmode) {waitForUser("A table with all the output information has been generated \nand saved to the specified folder.");}
			run("Close");
			}
			
		/*Label everything in the image*/
		if (save_overview) {
			selectImage(img2);
			rename("Original");
			getDimensions(width, height, channels, slices, frames);
			if (skeleton) {
				selectWindow(filename+"_Skeleton.tif");
				run("Scale...", "x=3.5 y=3.5 z=1.0 interpolation=Bilinear fill process create");
				selectWindow(filename+"_Skeleton.tif");
				close();
				setBackgroundColor(255,255,255);
				run("Scale...", "x="+1/pixelWidth/1.4+" y="+1/pixelWidth/1.4+" z=1.0 interpolation=Bilinear fill average process");
				makeRectangle((getWidth()-width)/2, (getHeight()-height)/2, width, height);
				run("Crop");
				rename("Skeleton");
				if (branch_info) {
					selectWindow("Endpoints");
					run("Invert","stack");
					setBackgroundColor(255,255,255);
					run("Options...","iterations=1 count=1 do=Dilate stack");
					run("Scale...", "x=3.5 y=3.5 z=1.0 interpolation=Bilinear fill process create");
					selectWindow("Endpoints");
					close();
					setBackgroundColor(255,255,255);
					run("Scale...", "x="+1/pixelWidth/1.4+" y="+1/pixelWidth/1.4+" z=1.0 interpolation=Bilinear fill average process");
					makeRectangle((getWidth()-width)/2, (getHeight()-height)/2, width, height);
					run("Crop");
					rename("Endpoints");}
				selectWindow("Nodes");
				setBackgroundColor(255,255,255);
				run("Options...","iterations=1 count=1 do=Dilate stack");
				run("Scale...", "x=3.5 y=3.5 z=1.0 interpolation=Bilinear fill process create");
				selectWindow("Nodes");
				close();
				setBackgroundColor(255,255,255);
				run("Scale...", "x="+1/pixelWidth/1.4+" y="+1/pixelWidth/1.4+" z=1.0 interpolation=Bilinear fill average process");
				makeRectangle((getWidth()-width)/2, (getHeight()-height)/2, width, height);
				run("Crop");
				rename("Nodes");}
			if (lacunae) {
				selectWindow(filename+"_Outlines");
				setBackgroundColor(255,255,255);
				run("Options...","iterations=3 count=1 do=Dilate stack");
				run("Scale...", "x=0.25 y=0.25 z=1.0 interpolation=Bilinear fill average process");
				setBackgroundColor(255,255,255);
				makeRectangle((getWidth()-width)/2, (getHeight()-height)/2, width, height);
				run("Crop");		
				run("Convert to Mask", "method=Default background=Light");
				rename("Outlines");
				if (skeleton) {
					if (branch_info){run("Merge Channels...", "c1=Original c2=Outlines c3=Skeleton c4=Endpoints c5=Nodes-1 create");}
					else {run("Merge Channels...", "c1=Original c2=Outlines c3=Skeleton c4=Nodes create");}}
				else {run("Merge Channels...", "c1=Original c2=Outlines create");}}
			else {
				if (skeleton) {
					if (branch_info) {run("Merge Channels...", "c1=Original c2=Skeleton c3=Endpoints c4=Nodes create");}
					else {run("Merge Channels...", "c1=Original c2=Skeleton c3=Nodes");}
				else{continue}}}
			run("Grays");
			run("Next Slice [>]");
			run("Yellow");
			run("Next Slice [>]");
			run("Cyan");
			run("Next Slice [>]");
			run("Blue");
			run("Next Slice [>]");
			run("Magenta");
			saveAs("Tiff", dir2+filename+"_result.tif");}
		if (testmode) {waitForUser("The tool has created an overview image. LUTs can be adjusted to \npreference, or channels can be removed.");}
		close("*"); //close all images
		run("Collect Garbage");
	//	finish=getTime();
	//	minutes=(finish-start)/1000/60;
	//	print(filename+" has been analyzed in "+minutes+" minutes.\nThat is "+minutes/size*60+" seconds per frame.");
}
